PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'John Doe', 'session': 'Test'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = black
  expName = Main
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent targetText
      color [set every repeat] = $stimColor
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.15
      startVal [time (s)] = 0.50
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $stimText
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    KeyboardComponent respKeyboard
      allowedKeys = 'a','s','k','l'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.50
      stopVal [duration (s)] = 1.0
      store = first key
      storeCorrect = True
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  Routine instruction
    TextComponent instructionText
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        در این قسمت به جای اشکال از کلمات استفاده شده است.
        کلمات را نادیده بگیرید و فقط به رنگ پاسخ بدهید.
    KeyboardComponent instructionKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine praInstruction
    TextComponent praText
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        در این آزمون ما در پی سنجش سرعت پاسخگویی شما به رنگها هستیم.
        شما باید با سریعترین حالت ممکن به رنگها پاسخ و دکمه‌ی مناسب آن را را فشار بدهید.
        از چهار رنگ زرد، قرمز، آبی و سبز در این آزمون استفاده شده است.
        ابتدا کمی تمرین کنیم.
        لطفا به رنگ اشکال پاسخ بدهید.
    KeyboardComponent praInsKeboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice
    KeyboardComponent praKeyboard
      allowedKeys = 'a','s','k','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      store = first key
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    PolygonComponent praShape
      fillColor [set every repeat] = $stimShapeColor
      lineColor [set every repeat] = $stimShapeColor
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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  Routine praAgain
    CodeComponent praAgainCode
      Code Type = Py
      End Routine:
        if praAgainKeyboard.keys == 'n' :
            praAgainLoop.finished = True
        else :
            pass
    TextComponent praAgainText
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      text = آیا نیاز به تمرین بیشتر دارید؟
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    KeyboardComponent praAgainKeyboard
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine trialEnd
    TextComponent trialEndText
      font = Calibri
      languageStyle = Arabic
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text =  از همکاری شما در این پژوهش صمیمانه متشکریم.
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    KeyboardComponent trialEndKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine praInstruction
  LoopInitiator praAgainLoop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    LoopInitiator practices loopType="TrialHandler"
      conditionsFile = ShapesColors.xlsx
      isTrials = False
      loopType = random
      nReps = 5
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      conditions:
        [OrderedDict([('stimShapeColor', 'green')]),
        OrderedDict([('stimShapeColor', 'blue')]),
        OrderedDict([('stimShapeColor', 'red')]),
        OrderedDict([('stimShapeColor', 'yellow')])]
      Routine practice
    LoopTerminator practices
    Routine praAgain
  LoopTerminator praAgainLoop
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = WordsColors.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('stimText', 'سبز'), ('stimColor', 'green'), ('corrAns', 'a')]),
      OrderedDict([('stimText', 'سبز'), ('stimColor', 'blue'), ('corrAns', 's')]),
      OrderedDict([('stimText', 'سبز'), ('stimColor', 'red'), ('corrAns', 'k')]),
      OrderedDict([('stimText', 'سبز'), ('stimColor', 'yellow'), ('corrAns', 'l')]),
      OrderedDict([('stimText', 'آبی'), ('stimColor', 'green'), ('corrAns', 'a')]),
      OrderedDict([('stimText', 'آبی'), ('stimColor', 'blue'), ('corrAns', 's')]),
      OrderedDict([('stimText', 'آبی'), ('stimColor', 'red'), ('corrAns', 'k')]),
      OrderedDict([('stimText', 'آبی'), ('stimColor', 'yellow'), ('corrAns', 'l')]),
      OrderedDict([('stimText', 'قرمز'), ('stimColor', 'green'), ('corrAns', 'a')]),
      OrderedDict([('stimText', 'قرمز'), ('stimColor', 'blue'), ('corrAns', 's')]),
      OrderedDict([('stimText', 'قرمز'), ('stimColor', 'red'), ('corrAns', 'k')]),
      OrderedDict([('stimText', 'قرمز'), ('stimColor', 'yellow'), ('corrAns', 'l')]),
      OrderedDict([('stimText', 'زرد'), ('stimColor', 'green'), ('corrAns', 'a')]),
      OrderedDict([('stimText', 'زرد'), ('stimColor', 'blue'), ('corrAns', 's')]),
      OrderedDict([('stimText', 'زرد'), ('stimColor', 'red'), ('corrAns', 'k')]),
      OrderedDict([('stimText', 'زرد'), ('stimColor', 'yellow'), ('corrAns', 'l')])]
    Routine trial
  LoopTerminator trials
  Routine trialEnd
